CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:cellwall
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:1.0
    Relative pixel spacing in Y:1.0
    Relative pixel spacing in Z:1.0
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
GaussianFilter:[module_num:5|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
    Select the input image:cellwall
    Name the output image:GaussianFilter
    Sigma:1

ErodeImage:[module_num:6|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
    Select the input image:cellwall
    Name the output image:ErodeImage
    Structuring element:Diamond,1

Threshold:[module_num:7|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
    Select the input image:ErodeImage
    Name the output image:Threshold
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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    Size of adaptive window:15
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    Thresholding method:Otsu

Watershed:[module_num:8|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
    Select the input image:ErodeImage
    Name the output object:Watershed
    Use advanced settings?:No
    Generate from:Markers
    Markers:ErodeImage
    Mask:Threshold
    Connectivity:3
    Compactness:1
    Footprint:8
    Downsample:1
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:GaussianFilter
    Segmentation distance transform smoothing factor:1
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Ball,1

ResizeObjects:[module_num:9|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
    Select the input object:Watershed
    Name the output object:ResizeObjects
    Method:Factor
    X Factor:2
    Y Factor:2
    Z Factor:2
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
ConvertObjectsToImage:[module_num:10|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
    Select the input objects:ResizeObjects
    Name the output image:CellImage
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:CellImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:cellwall
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CellProfilerProcessed
    Saved file format:tiff
    Output file location:Same folder as image|OneDrive\\Documents\\School\\IndependentStudy\\Data\\Stalk1_4p5um_1272_4K_HMDS_clean_subset_segmented\\3
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
